PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (2.128,2.128)
      startVal [time (s)] = 250
      units = cm
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    PolygonComponent target
      fillColor = white
      pos = (-5, 0)
      shape = circle
      size = (2.128, 2.128)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 500
      units = cm
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    CameraComponent cam
      cameraLib = opencv
      device = default
      deviceLabel = webcam
      deviceManual = 0
      mic = None
      micChannels = auto
      micMaxRecSize = 24000
      micSampleRate = DVD Audio (48kHz)
      saveFile = True
      startVal [time (s)] = 0
      syncScreenRefresh = False
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    KeyboardComponent taskStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
