PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1728, 1117]
  color = [-1,-1,-1]
  expName = IOR3
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 0
  winBackend = pygame
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Routines
  Routine practice_trials
    RoutineSettingsComponent practice_trials
      backgroundFit = fill
      color = -1.0000, -1.0000, -1.0000
      useWindowParams = True
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    CodeComponent practice_code
      Code Type = Auto->JS
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      Before Experiment:
        prefs.hardware['skipFrameCheck'] = True
    TextComponent practice_fixation
      durationEstim = 3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.8+ISI+ 1
      text = +
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    PolygonComponent practice_leftBox
      durationEstim = 3
      fillColor = grey
      lineColor [set every frame] = grey
      lineWidth = 3
      pos = (-53.34, 0)
      shape = rectangle
      size = (21.28, 21.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8+ISI+1
      units = cm
      vertices = 4
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    PolygonComponent practice_RightBox
      durationEstim = 3
      fillColor = grey
      lineColor [set every frame] = grey
      lineWidth = 3
      pos = (53.34, 0)
      shape = rectangle
      size = (21.28, 21.28)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8+ISI+1
      units = cm
      vertices = 4
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    KeyboardComponent practice_key_resp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct
      durationEstim = 3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8+ISI+1
      store = first key
      storeCorrect = True
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    PolygonComponent practice_Cue
      fillColor = white
      lineWidth = 3
      pos [set every repeat] = cueSide
      shape = rectangle
      size = [2.128,2.128]
      startVal [time (s)] = .75
      stopVal [duration (s)] = .05
      units = deg
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    PolygonComponent practice_target
      fillColor = white
      lineWidth = 3
      pos [set every repeat] = targetSide
      shape = rectangle
      size = [2.128,2.128]
      startVal [time (s)] = 0.8+ISI
      stopVal [duration (s)] = 1
      units = cm
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  Routine trials
    RoutineSettingsComponent trials
      color = -1.0000, -1.0000, -1.0000
      useWindowParams = True
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    CodeComponent code
      Code Type = Auto->JS
    TextComponent fixation
      durationEstim = 3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.8+ISI+ 1
      text = +
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    PolygonComponent leftBox
      durationEstim = 3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor [set every frame] = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = .5
      pos = (-5.334, 0)
      shape = rectangle
      size = (2.128, 2.128)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8+ISI+1
      units = cm
      vertices = 4
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    PolygonComponent rightBox
      durationEstim = 3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor [set every frame] = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = .5
      pos = (5.334, 0)
      shape = rectangle
      size = (2.128, 2.128)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8+ISI+1
      units = cm
      vertices = 4
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct
      durationEstim = 3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8+ISI+1
      store = first key
      storeCorrect = True
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    PolygonComponent cue
      fillColor = white
      lineWidth = 3
      pos [set every repeat] = cueSide
      shape = rectangle
      size = [2.128,2.128]
      startVal [time (s)] = .75
      stopVal [duration (s)] = .05
      units = deg
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    PolygonComponent target
      fillColor = white
      lineWidth = 3
      pos [set every repeat] = targetSide
      shape = rectangle
      size = [2.128,2.128]
      startVal [time (s)] = 0.8+ISI
      stopVal [duration (s)] = 1
      units = cm
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  Routine preCue_Instruction
    RoutineSettingsComponent preCue_Instruction
      color = -1.0000, -1.0000, -1.0000
      useWindowParams = True
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    TextComponent text_instr_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        Focus your eyes on the plus sign at all times during the experiment.

        Two circles will appear one after the other:
        The first circle is the cue—please ignore it.
        The second circle is the target—this is what you need to respond to.

        Your task:
        Press the left arrow key if the target appears in the left box.
        Press the right arrow key if the target appears in the right box.
    KeyboardComponent nextButton
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent precue_bottom_txt
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press Space to Continue
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  Routine target_instruction
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    TextComponent text_instr_4
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        After a short random delay, a second circle will appear—this is the target.

        Your job is to press the left arrow key if the target appears in the left box, or the right arrow key if it appears in the right box.
    ImageComponent image_instr1_3
      image = C:/Users/basbe/Desktop/Picture3.jpg
      interpolate = nearest
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent nextButton_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent bottom_text
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press Space to Continue
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  Routine Pre_Practice_window
    RoutineSettingsComponent Pre_Practice_window
      color = [-1.0000, -1.0000, -1.0000]
      useWindowParams = True
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    TextComponent text_norm_3
      letterHeight = 0.1
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        In the next portion you will get 15 practice trials!

        Remember to:
        Only respond to the second circle
        Keep your eyes on the plus sign.
    KeyboardComponent key_instruct_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent preExperimentTxt_2
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press either arrow to Start
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  Routine Pre_experiment_window
    RoutineSettingsComponent Pre_experiment_window
      color = -1.0000, -1.0000, -1.0000
      useWindowParams = True
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    TextComponent text_norm
      letterHeight = 0.1
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        In the next portion you will begin the experiment
        Every 128 trials you will get a break, after 4 total blocks the experiment will close out.
        Remember to:
        Only respond to the second circle (target), and keep your eyes on the plus sign.
    KeyboardComponent key_instruct
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    TextComponent preExperimentTxt
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press either arrow to Continue
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  Routine break_2
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        You can take a short break now.



        Press any arrow to continue
    KeyboardComponent key_instruct_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine error_feedback
    RoutineSettingsComponent error_feedback
      color = -1.0000, -1.0000, -1.0000
      useWindowParams = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ''  # Default to an empty string
      Begin Routine:
        if not key_resp.keys:  # No response was made
            msg = 'Too slow! Please respond faster.'
        else:
            msg = ''
    TextComponent text
      color [set every repeat] = 1.0000, -1.0000, -1.0000
      letterHeight = 0.075
      pos = (0, .25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
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  Routine practice_error_feedback
    RoutineSettingsComponent practice_error_feedback
      color = -1.0000, -1.0000, -1.0000
      useWindowParams = True
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ''  # Default to an empty string
      Begin Routine:
        if not practice_key_resp.keys:  # No response was made
            msg = 'Too slow! Please respond faster.'
        else:
            msg = ''
    TextComponent text_2
      color [set every repeat] = red
      letterHeight = 0.075
      pos = (0, .25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
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Flow
  Routine preCue_Instruction
  Routine Pre_Practice_window
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = practiceconditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('cueSide', [0.5334, 0]), ('targetSide', [0.5334, 0]), ('correct', 'right'), ('ISI', 0.05), ('Validity', 'Valid')]),
      OrderedDict([('cueSide', [0.5334, 0]), ('targetSide', [-0.5334, 0]), ('correct', 'left'), ('ISI', 0.05), ('Validity', 'Invalid')]),
      OrderedDict([('cueSide', [0.5334, 0]), ('targetSide', [0.5334, 0]), ('correct', 'right'), ('ISI', 0.15), ('Validity', 'Valid')]),
      OrderedDict([('cueSide', [0.5334, 0]), ('targetSide', [-0.5334, 0]), ('correct', 'left'), ('ISI', 0.15), ('Validity', 'Invalid')]),
      OrderedDict([('cueSide', [-0.5334, 0]), ('targetSide', [-0.5334, 0]), ('correct', 'left'), ('ISI', 0.35), ('Validity', 'Valid')]),
      OrderedDict([('cueSide', [-0.5334, 0]), ('targetSide', [0.5334, 0]), ('correct', 'right'), ('ISI', 0.35), ('Validity', 'Invalid')]),
      OrderedDict([('cueSide', [0.5334, 0]), ('targetSide', [0.5334, 0]), ('correct', 'right'), ('ISI', 0.55), ('Validity', 'Valid')]),
      OrderedDict([('cueSide', [0.5334, 0]), ('targetSide', [-0.5334, 0]), ('correct', 'left'), ('ISI', 0.55), ('Validity', 'Invalid')]),
      OrderedDict([('cueSide', [-0.5334, 0]), ('targetSide', [0.5334, 0]), ('correct', 'right'), ('ISI', 0.75), ('Validity', 'Invalid')]),
      OrderedDict([('cueSide', [-0.5334, 0]), ('targetSide', [-0.5334, 0]), ('correct', 'left'), ('ISI', 0.75), ('Validity', 'Valid')]),
      OrderedDict([('cueSide', [-0.5334, 0]), ('targetSide', [0.5334, 0]), ('correct', 'right'), ('ISI', 0.95), ('Validity', 'Invalid')])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
    Routine practice_trials
    Routine practice_error_feedback
  LoopTerminator practice_loop
  Routine Pre_experiment_window
  LoopInitiator trial_loop loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('ISI', 0.05), ('cueSide', [5, 0]), ('targetSide', [5, 0]), ('validity', 'cued'), ('answer', 'right'), ('trialType', 'regular')]),
      OrderedDict([('ISI', 0.05), ('cueSide', [5, 0]), ('targetSide', [-5, 0]), ('validity', 'uncued'), ('answer', 'left'), ('trialType', 'regular')]),
      OrderedDict([('ISI', 0.05), ('cueSide', [-5, 0]), ('targetSide', [5, 0]), ('validity', 'uncued'), ('answer', 'right'), ('trialType', 'regular')]),
      OrderedDict([('ISI', 0.05), ('cueSide', [-5, 0]), ('targetSide', [-5, 0]), ('validity', 'cued'), ('answer', 'left'), ('trialType', 'regular')]),
      OrderedDict([('ISI', 0.15), ('cueSide', [5, 0]), ('targetSide', [5, 0]), ('validity', 'cued'), ('answer', 'right'), ('trialType', 'regular')]),
      OrderedDict([('ISI', 0.15), ('cueSide', [5, 0]), ('targetSide', [-5, 0]), ('validity', 'uncued'), ('answer', 'left'), ('trialType', 'regular')]),
      OrderedDict([('ISI', 0.15), ('cueSide', [-5, 0]), ('targetSide', [5, 0]), ('validity', 'uncued'), ('answer', 'right'), ('trialType', 'regular')]),
      OrderedDict([('ISI', 0.15), ('cueSide', [-5, 0]), ('targetSide', [-5, 0]), ('validity', 'cued'), ('answer', 'left'), ('trialType', 'regular')]),
      OrderedDict([('ISI', 0.35), ('cueSide', [5, 0]), ('targetSide', [5, 0]), ('validity', 'cued'), ('answer', 'right'), ('trialType', 'regular')]),
      OrderedDict([('ISI', 0.35), ('cueSide', [5, 0]), ('targetSide', [-5, 0]), ('validity', 'uncued'), ('answer', 'left'), ('trialType', 'regular')])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
    Routine trials
    Routine error_feedback
  LoopTerminator trial_loop
  Routine break_2
  LoopInitiator trial_loop2 loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('cueSide', [-0.35, 0]), ('targetSide', [-0.35, 0]), ('correct', 'left'), ('soa', 0.2), ('Validity', 'Valid')]),
      OrderedDict([('cueSide', [-0.35, 0]), ('targetSide', [-0.35, 0]), ('correct', 'left'), ('soa', 0.2), ('Validity', 'Valid')]),
      OrderedDict([('cueSide', [0.35, 0]), ('targetSide', [0.35, 0]), ('correct', 'right'), ('soa', 0.2), ('Validity', 'Valid')]),
      OrderedDict([('cueSide', [0.35, 0]), ('targetSide', [0.35, 0]), ('correct', 'right'), ('soa', 0.2), ('Validity', 'Valid')]),
      OrderedDict([('cueSide', [-0.35, 0]), ('targetSide', [0.35, 0]), ('correct', 'right'), ('soa', 0.2), ('Validity', 'Invalid')]),
      OrderedDict([('cueSide', [-0.35, 0]), ('targetSide', [0.35, 0]), ('correct', 'right'), ('soa', 0.2), ('Validity', 'Invalid')]),
      OrderedDict([('cueSide', [0.35, 0]), ('targetSide', [-0.35, 0]), ('correct', 'left'), ('soa', 0.2), ('Validity', 'Invalid')]),
      OrderedDict([('cueSide', [0.35, 0]), ('targetSide', [-0.35, 0]), ('correct', 'left'), ('soa', 0.2), ('Validity', 'Invalid')]),
      OrderedDict([('cueSide', [-0.35, 0]), ('targetSide', [-0.35, 0]), ('correct', 'left'), ('soa', 0.3), ('Validity', 'Valid')]),
      OrderedDict([('cueSide', [-0.35, 0]), ('targetSide', [-0.35, 0]), ('correct', 'left'), ('soa', 0.3), ('Validity', 'Valid')]),
      OrderedDict([('cueSide', [0.35, 0]), ('targetSide', [0.35, 0]), ('correct', 'right'), ('soa', 0.3), ('Validity', 'Valid')]),
      OrderedDict([('cueSide', [0.35, 0]), ('targetSide', [0.35, 0]), ('correct', 'right'), ('soa', 0.3), ('Validity', 'Valid')])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
    Routine trials
    Routine error_feedback
  LoopTerminator trial_loop2
  Routine break_2
  LoopInitiator trial_loop3 loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 2
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    conditions:
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    Routine trials
    Routine error_feedback
  LoopTerminator trial_loop3
  Routine break_2
  LoopInitiator trial_loop4 loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 2
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    conditions:
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    Routine trials
    Routine error_feedback
  LoopTerminator trial_loop4
